group 'Python variables' {
    var py_seq_index = 0
    var py_seqs = [0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
    var py_n_stims = 0
    var py_stim_paths = []
    var py_start_stim_index = 0
    var py_end_stim_index = 0
    var py_trial_id = 0
    var py_trial_meta_id = 0
    var py_stim_drift_direction = 0
    var py_options_pos = []
    var py_num_options = 0
    var py_options_bin = []
    var py_stim_dist_cum = [0, 0,0, 0, 0, 0,0,0]
    var py_stim_pos = []
    var py_stim_bin = []
    var py_option_0 = 0
    var py_option_1 = 0
}
var n_stims = 2

group 'Sequence variables' {
    var stim_pos = [0, 0, 0, 0, 0, 0, 0, 0]
    var stim_bin = [0, 0, 0, 0, 0, 0, 0, 0]
    var stim_dist_cum = [0, 0, 0, 0, 0, 0, 0, 0]
    var n_conditions = 1
    var block_index = 0
}

group 'Display variables' {
    var margin = 10e-2
}

group 'Trial variables' {
    var trial_id = 0
    var trial_meta_id = 0
    var stim_drift_speed = 8
    var stim_drift_direction = 0
    var stim_drift_start_time = 0
    var stim_drift_fixed = 0
    var alpha_multiplier_fixed = 0

    var option_0 = 0
    var option_1 = 0
    var options_pos = [0, 0, 0, 0, 0, 0, 0, 0]
    var options_bin = [0, 0, 0, 0, 0, 0, 0, 0]
    var selected = -1

    var curr_stim_index = 0
    var start_stim_index = 0
    var end_stim_index = 0
    var seq_len (scope = local; default_value = 0)
    var stim_index (scope = local; default_value = 0)
    var option_stim_index (scope = local; default_value = 0)

    var num_options = 2
    var depth_display = 1
}

group 'Trial variables - Behavior' {
    var failure = 0
    var success = 0
    var ignore = 0
}

group 'Block variables' {
    var n_trials_in_block = 0
    var n_success_in_block = 0
    var n_failure_in_block = 0
    var trial_index = 0
}

group 'Experiment variable - Behavior' {
    var nsuccess = 0
    var nfailure = 0
    var nignore = 0
    var nconsecsuccess = 0

    var pointer_x = 0
    var pointer_y = 0

    var criterion = 1
}

group 'Option selector flags' {
    var selected_0 = 0
    var selected_1 = 0
}

group 'Experiment variables' {
    var meta_index = 1
    var subject_id = 0
    var seq_index = 0
    var seq_id = 0
    var seqs = [0]
    var n_trials = 0

    var use_mouse = 0
    var testing = 1
    var use_keyboard = 1

    var sync = -1

    var rand_drift_pause_dur = 1
}

group 'Phases' {
    var fixation = 0
    var pre_drift = 0
    var drift = 0
    var drift_transition = 0
    var drift_pause = 0
    var post_drift = 0
    var pre_choice = 0
    var choice = 0
    var feedback = 0
    var end_trial = 0
}

group 'Phase durations' {
    var pre_drift_dur = 1s
    var post_drift_dur = 0.5s
    var pre_choice_dur = 0.5s
    var choice_dur = 3s
    var feedback_dur = 1s
    var drift_pause_dur = 1s
    var break_dur = 60s
    var base_drift_pause_dur = 0.5s
}
group 'Stimulus display variables' {
    var br = 0.5
    var bg = 0.5
    var bb = 0.5

    var stim_size = 7
    var stim_padding = 1
    var stim_position_y = 1

    var option_distance = 8
    var option_stim_size = 3
    var option_selector_distance = 11

    var alpha_m = 0
    var alpha_m_inc = 0.1
    var nconsecsucc_increment = 3

    var num_visible_stims = 1
    var seq_len_stim_size = 4
}